!-----------------------------------------------------------------------------------------------
! This is a script that has been set up by John Kuzmeski for the MSKI section of the HRAPS Program in the 
! summer of 2023 this is the model building section of the code. Ideally this the program is run and a model is built 
! after which the user should check the work of the model to make sure it has worked correctly before exporting its 
! values.
!-----------------------------------------------------------------------------------------------

!-----------------------------------------------------------------------------------------------
! This Program is designed to loop over a number of subjects the SUBJ parameter is the subject number that
! is being built
!-----------------------------------------------------------------------------------------------

For_Each
/ITERATION_PARAMETER_NAME=SUBJ
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/ITEMS= F01
;

!-----------------------------------------------------------------------------------------------
! This will clear the workspace to allow for the new subject mdoel to be built
!-----------------------------------------------------------------------------------------------

File_New

;

!-----------------------------------------------------------------------------------------------
! The CAL_FOLDER is used to reference where the standing calibration file is held and all of the motion
! files. V3D needs long name file locations to reference all of the model building functions. By changing CAL_FOLDER
! parameter will change all of the location dynamically. 
!-----------------------------------------------------------------------------------------------

Set_Pipeline_Parameter
/PARAMETER_NAME=CAL_FOLDER
/PARAMETER_VALUE=C:\Users\jkuzm\OneDrive - University of Massachusetts\HRSL x UMILL-PUMA Fatigue - Fatigue\Data\&::SUBJ&\
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! /MULTI_PASS=FALSE
;

!-----------------------------------------------------------------------------------------------
! MODEL_FOLDER is references the models that will be used for the project. 
!-----------------------------------------------------------------------------------------------
Set_Pipeline_Parameter
/PARAMETER_NAME=MODEL_FOLDER
/PARAMETER_VALUE=C:\Users\jkuzm\OneDrive - University of Massachusetts\HRSL x UMILL-PUMA Fatigue - Fatigue\V3D\Models\
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;

!-----------------------------------------------------------------------------------------------
! WKS_FOLDER is the location that the workspace will be saved. 
!-----------------------------------------------------------------------------------------------
Set_Pipeline_Parameter
/PARAMETER_NAME=WKS_FOLDER
/PARAMETER_VALUE=C:\Users\jkuzm\OneDrive - University of Massachusetts\HRSL x UMILL-PUMA Fatigue - Fatigue\V3D\Workspace\
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;

! Search each numbered trial separately so unnumbered Distance statics are excluded.
For_Each
/ITERATION_PARAMETER_NAME=TRIAL_NUMBER
/ITEMS=1+2+3
;

Set_Pipeline_Parameter
/PARAMETER_NAME=STATIC_MASK
/PARAMETER_VALUE=*static&::TRIAL_NUMBER&.c3d
;

Set_Pipeline_Parameter_To_List_Of_Files
/PARAMETER_NAME=SHOE_STATIC_LIST
/FOLDER=::CAL_FOLDER
! /SEARCH_SUBFOLDERS=FALSE
/FILE_MASK=::STATIC_MASK
! /ALPHABETIZE=TRUE
/RETURN_FOLDER_NAMES=FALSE
;

Set_Pipeline_Parameter
/PARAMETER_NAME=SHOE_STATIC_LIST
/PARAMETER_VALUE=::SHOE_STATIC_LIST
/PARAMETER_VALUE_SEARCH_FOR=::CAL_FOLDER
/PARAMETER_VALUE_REPLACE_WITH=
;

!-----------------------------------------------------------------------------------------------
! 2. Start the Loop for each Shoe found
!-----------------------------------------------------------------------------------------------
For_Each
/ITERATION_PARAMETER_NAME=CURRENT_STATIC_FILE
/ITEMS=::SHOE_STATIC_LIST
;

! Define the specific calibration file for this loop iteration
Set_Pipeline_Parameter
/PARAMETER_NAME=CAL_FILE
/PARAMETER_VALUE=::CAL_FOLDER&::CURRENT_STATIC_FILE
;

! Pair each numbered shoe static with the metabolic trial of the same number.
! For example, Dev3_static2.c3d becomes Dev3_Metabolic2.c3d.
Set_Pipeline_Parameter
/PARAMETER_NAME=MOTION_FILE_LOWER_STATIC
/PARAMETER_VALUE=::CURRENT_STATIC_FILE
/PARAMETER_VALUE_SEARCH_FOR=_static
/PARAMETER_VALUE_REPLACE_WITH=_Metabolic
;

! Some subjects use an uppercase S in Static.
Set_Pipeline_Parameter
/PARAMETER_NAME=MOTION_FILE
/PARAMETER_VALUE=::MOTION_FILE_LOWER_STATIC
/PARAMETER_VALUE_SEARCH_FOR=_Static
/PARAMETER_VALUE_REPLACE_WITH=_Metabolic
;

!-----------------------------------------------------------------------------------------------
 ! Build the Model (Standard Pipeline)
!-----------------------------------------------------------------------------------------------
Create_Hybrid_Model
/CALIBRATION_FILE=::CAL_FILE
/RANGE=10
 ;

Remove_Prefix_From_Point_Labels;

Append_Model_Template
/CALIBRATION_FILE= ::CAL_FILE
/MODEL_TEMPLATE=&::MODEL_FOLDER&Simple_model.mdh
;

!-----------------------------------------------------------------------------------------------
    ! Open only the metabolic trial paired with this static.
    !-----------------------------------------------------------------------------------------------
    File_Open
    /FILE_NAME=::CAL_FOLDER&::MOTION_FILE
    ;

Remove_Prefix_From_Point_Labels;

Remove_Unlabeled_Points
! /INCLUDE_MODELS=FALSE
;

Assign_Model_File
    /CALIBRATION_FILE= ::CAL_FILE
    /MOTION_FILE_NAMES= ::CAL_FOLDER&::MOTION_FILE
    ;

End_For_Each
/ITERATION_PARAMETER_NAME=CURRENT_STATIC_FILE
;

End_For_Each
/ITERATION_PARAMETER_NAME=TRIAL_NUMBER
;

FP_Auto_Baseline
/FP_NUMBER=1
! /AUTO_ZERO=TRUE
! /AUTO_FP_MINIMUM=TRUE
! /USE_REDUCED_FP_MINIMUM_AROUND_FORCE=TRUE
! /REDUCED_FP_MINIMUM=5.0
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;

! MODIFY FOR INDIVIDUAL SESSIONS

Modify_Force_Platform_Parameters
/FP_USED=1
/FP_TYPE=6
/FP_CHANNEL=1+2+3+7+8+9+10+11+12+4+5+6
/FP_ORIGIN=354+535+-35
/FP_CALMATRIX=-146.263+0+0+0+0+0+0+0+0+0+0+0+0+145.975+0+0+0+0+0+0+0+0+0+0+0+0+286.944+0+0+0+0+0+0+0+0+0+0+0+0+146.22+0+0+0+0+0+0+0+0+0+0+0+0+-146.456+0+0+0+0+0+0+0+0+0+0+0+0+287.935+0+0+0+0+0+0+0+0+0+0+0+0+144.707+0+0+0+0+0+0+0+0+0+0+0+0+-146.461+0+0+0+0+0+0+0+0+0+0+0+0+286.418+0+0+0+0+0+0+0+0+0+0+0+0+-145.571+0+0+0+0+0+0+0+0+0+0+0+0+146.972+0+0+0+0+0+0+0+0+0+0+0+0+286.615
/STORE_CALMATRIX=BYCOLUMN
/FP_ZERO=0+0
/FP_ZEROS=0+0
/FP_CORNER1=-74.+1015.+-27.
/FP_CORNER2=633.+1017.+-27.
/FP_CORNER3=637.+-44.+-27.
/FP_CORNER4=-77.+-53.+-27.
/FP_COP_POLYNOMIAL=0+0+0+0+0+0+0+0+0+0+0+0
/FP_COP_TRANSLATION=0+0+0
/FP_COP_ROTATION=0+0+0
! /UPDATE_C3D_FILE=FALSE
! /MODIFY_CAL_FILE=FALSE
;

!-----------------------------------------------------------------------------------------------
! Lowpass_Filter applies a 20Hz cutoff 4th order Butterworth Filter. 
!-----------------------------------------------------------------------------------------------
Lowpass_Filter
/SIGNAL_TYPES=TARGET
! /SIGNAL_FOLDER=ORIGINAL
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! /RESULT_FOLDER=PROCESSED
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! /FILTER_CLASS=BUTTERWORTH
/FREQUENCY_CUTOFF=20
/NUM_REFLECTED=25
! /NUM_EXTRAPOLATED=0
/TOTAL_BUFFER_SIZE=25
/NUM_BIDIRECTIONAL_PASSES=2
;

!-----------------------------------------------------------------------------------------------
! Lowpass_Filter applies a 20Hz cutoff 4th order Butterworth Filter. 
!-----------------------------------------------------------------------------------------------
Lowpass_Filter
/SIGNAL_TYPES=ANALOG
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/FREQUENCY_CUTOFF=20
/NUM_REFLECTED=25
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/TOTAL_BUFFER_SIZE=12
/NUM_BIDIRECTIONAL_PASSES=2
;

Set_Use_Processed_Analog
 /USE_PROCESSED=TRUE
;

Set_Use_Processed_Targets
! /USE_PROCESSED=TRUE
! /INCLUDE_POSE_ESTIMATION=TRUE
;

Recalc

;

Select_Active_File
/FILE_NAME=ALL_FILES
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! /SUBJECT_TAGS=NO_SUBJECT
;

!-----------------------------------------------------------------------------------------------
! This calls the AUTOGAIT2 Script. This script is long and confusing but in short it first loops over the 
! trial and finds all of the force plate recognized Gait events. Then it is looped over again to check if the foot
! is close to the platform and is sufficiently stretched from the other foot for each of the force plate recognized
! events. If you have question go into AUTOGAIT2.v3s it will have its own comments that get into the mud.  
!-----------------------------------------------------------------------------------------------
Call_Script
/SCRIPT_FILE_NAME=C:\Users\jkuzm\OneDrive - University of Massachusetts\ShoeMass - Data\Foot_data\Treadmill\Pipeline\AUTOGAIT3.v3s
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;

!-----------------------------------------------------------------------------------------------
! The next section calculates all of the Link_Model_Based variables. For information on specific variable 
! check Visual3D pipeline documentation they have comprehensive tutorials for each variable and how they are 
! calculated 
!-----------------------------------------------------------------------------------------------

Select_Active_File
/FILE_NAME= ALL_FILES
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;

Multiply_Signals_By_Constant
 /SIGNAL_TYPES=FORCE
 /SIGNAL_FOLDER=PROCESSED
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 /RESULT_TYPES=FORCE
 /RESULT_FOLDERS=BW
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 /CONSTANT=1/(METRIC::PROCESSED::MASS*9.81)
;

Compute_Model_Based_Data
/RESULT_NAME=COM
/FUNCTION=MODEL_COG
/SEGMENT=
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RPV
! /USE_CARDAN_SEQUENCE=FALSE
! /NORMALIZATION=FALSE
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! /NEGATEX=FALSE
! /NEGATEY=FALSE
! /NEGATEZ=FALSE
! /AXIS1=X
! /AXIS2=Y
! /AXIS3=Z
! /TREADMILL_DATA=FALSE
! /TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
! /TREADMILL_SPEED=0.0
;

Compute_Model_Based_Data
/RESULT_NAME=RHipAngle
/FUNCTION=JOINT_ANGLE
/SEGMENT=RTH
/REFERENCE_SEGMENT=RPV
/RESOLUTION_COORDINATE_SYSTEM=
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 /TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
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;

Compute_Model_Based_Data
/RESULT_NAME=RKneeAngle
/FUNCTION=JOINT_ANGLE
/SEGMENT=RTH
/REFERENCE_SEGMENT=RSK
/RESOLUTION_COORDINATE_SYSTEM=
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 /TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
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;

Compute_Model_Based_Data
/RESULT_NAME=RAnkleAngle
/FUNCTION=JOINT_ANGLE
/SEGMENT=RFT
/REFERENCE_SEGMENT=RSK
/RESOLUTION_COORDINATE_SYSTEM=
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 /TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
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;

Compute_Model_Based_Data
/RESULT_NAME=RCalAngle
/FUNCTION=JOINT_ANGLE
/SEGMENT=RCal
/REFERENCE_SEGMENT=RSK
/RESOLUTION_COORDINATE_SYSTEM=
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;

Compute_Model_Based_Data
/RESULT_NAME=RMidfootAngle
/FUNCTION=JOINT_ANGLE
/SEGMENT=RCal
/REFERENCE_SEGMENT=RMet
/RESOLUTION_COORDINATE_SYSTEM=
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;

Compute_Model_Based_Data
/RESULT_NAME=RMTPAngle
/FUNCTION=JOINT_ANGLE
/SEGMENT=RHallux
/REFERENCE_SEGMENT=RMet
/RESOLUTION_COORDINATE_SYSTEM=
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;

Compute_Model_Based_Data
/RESULT_NAME=RVirualFootAngle
/FUNCTION=JOINT_ANGLE
/SEGMENT=Right_Virtual_Foot
/REFERENCE_SEGMENT=RSK
/RESOLUTION_COORDINATE_SYSTEM=
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 /TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
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;

Compute_Model_Based_Data
/RESULT_NAME=RHipMomentNorm
/FUNCTION=JOINT_MOMENT
/SEGMENT=RTH
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RPV
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
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;

Compute_Model_Based_Data
/RESULT_NAME=RKneeMomentNorm
/FUNCTION=JOINT_MOMENT
/SEGMENT=RSK
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RTH
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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;

Compute_Model_Based_Data
/RESULT_NAME=RAnkleMomentNorm
/FUNCTION=JOINT_MOMENT
/SEGMENT=RFT
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RSK
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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;

Compute_Model_Based_Data
/RESULT_NAME=RCalMomentNorm
/FUNCTION=JOINT_MOMENT
/SEGMENT=RCal
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RSK
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
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;

Compute_Model_Based_Data
/RESULT_NAME=RMidfootMomentNorm
/FUNCTION=JOINT_MOMENT
/SEGMENT=RMet
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RCal
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
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;

Compute_Model_Based_Data
/RESULT_NAME=RMTPMomentNorm
/FUNCTION=JOINT_MOMENT
/SEGMENT=RHallux
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RMet
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
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;

Compute_Model_Based_Data
/RESULT_NAME=RHipPowerNorm
/FUNCTION=JOINT_POWER
/SEGMENT=RTH
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RPV
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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 /TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
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;

Compute_Model_Based_Data
/RESULT_NAME=RKneePowerNorm
/FUNCTION=JOINT_POWER
/SEGMENT=RSK
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RTH
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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 /TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
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;

Compute_Model_Based_Data
/RESULT_NAME=RAnklePowerNorm
/FUNCTION=JOINT_POWER
/SEGMENT=RFT
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RSK
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
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;

Compute_Model_Based_Data
/RESULT_NAME=RCalPowerNorm
/FUNCTION=JOINT_POWER
/SEGMENT=RCal
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RSK
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
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;

Compute_Model_Based_Data
/RESULT_NAME=RMidfootPowerNorm
/FUNCTION=JOINT_POWER
/SEGMENT=RMet
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RCal
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
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;

Compute_Model_Based_Data
/RESULT_NAME=RMTPPowerNorm
/FUNCTION=JOINT_POWER
/SEGMENT=RHallux
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RMet
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
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;

Compute_Model_Based_Data
/RESULT_NAME=RHipPower
/FUNCTION=JOINT_POWER
/SEGMENT=RTH
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RPV
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/NORMALIZATION=FALSE
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/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
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;

Compute_Model_Based_Data
/RESULT_NAME=RKneePower
/FUNCTION=JOINT_POWER
/SEGMENT=RSK
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RTH
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/NORMALIZATION=FALSE
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/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
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;

Compute_Model_Based_Data
/RESULT_NAME=RAnklePower
/FUNCTION=JOINT_POWER
/SEGMENT=RFT
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RSK
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/NORMALIZATION=FALSE
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/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
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;

Compute_Model_Based_Data
/RESULT_NAME=RCalPower
/FUNCTION=JOINT_POWER
/SEGMENT=RCal
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RSK
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/NORMALIZATION=FALSE
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/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
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;

Compute_Model_Based_Data
/RESULT_NAME=RMidfootPower
/FUNCTION=JOINT_POWER
/SEGMENT=RMet
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RCal
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/NORMALIZATION=FALSE
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/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
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;

Compute_Model_Based_Data
/RESULT_NAME=RMTPPower
/FUNCTION=JOINT_POWER
/SEGMENT=RHallux
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RMet
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/NORMALIZATION=FALSE
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/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
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;

Compute_Model_Based_Data
/RESULT_NAME=LHipAngle
/FUNCTION=JOINT_ANGLE
/SEGMENT=LTH
/REFERENCE_SEGMENT=RPV
/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEY=TRUE
/NEGATEZ=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=LKneeAngle
/FUNCTION=JOINT_ANGLE
/SEGMENT=LTH
/REFERENCE_SEGMENT=LSK
/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEY=TRUE
/NEGATEZ=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=LAnkleAngle
/FUNCTION=JOINT_ANGLE
/SEGMENT=LFT
/REFERENCE_SEGMENT=LSK
/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEY=TRUE
/NEGATEZ=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=LCalAngle
/FUNCTION=JOINT_ANGLE
/SEGMENT=LCal
/REFERENCE_SEGMENT=LSK
/RESOLUTION_COORDINATE_SYSTEM=
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;

Compute_Model_Based_Data
/RESULT_NAME=LMidfootAngle
/FUNCTION=JOINT_ANGLE
/SEGMENT=LCal
/REFERENCE_SEGMENT=LMet
/RESOLUTION_COORDINATE_SYSTEM=
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;

Compute_Model_Based_Data
/RESULT_NAME=LMTPAngle
/FUNCTION=JOINT_ANGLE
/SEGMENT=LHallux
/REFERENCE_SEGMENT=LMet
/RESOLUTION_COORDINATE_SYSTEM=
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;

Compute_Model_Based_Data
/RESULT_NAME=LVirualFootAngle
/FUNCTION=JOINT_ANGLE
/SEGMENT=Left_Virtual_Foot
/REFERENCE_SEGMENT=LSK
/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEY=TRUE
/NEGATEZ=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=LHipMomentNorm
/FUNCTION=JOINT_MOMENT
/SEGMENT=LTH
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RPV
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/NEGATEY=TRUE
/NEGATEZ=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=LKneeMomentNorm
/FUNCTION=JOINT_MOMENT
/SEGMENT=LSK
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LTH
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/NEGATEY=TRUE
/NEGATEZ=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=LAnkleMomentNorm
/FUNCTION=JOINT_MOMENT
/SEGMENT=LFT
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LSK
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/NEGATEY=TRUE
/NEGATEZ=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=LCalMomentNorm
/FUNCTION=JOINT_MOMENT
/SEGMENT=LCal
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LSK
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/NEGATEY=TRUE
/NEGATEZ=TRUE
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/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
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;

Compute_Model_Based_Data
/RESULT_NAME=LMidfootMomentNorm
/FUNCTION=JOINT_MOMENT
/SEGMENT=LMet
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LCal
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/NEGATEY=TRUE
/NEGATEZ=TRUE
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/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
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;

Compute_Model_Based_Data
/RESULT_NAME=LMTPMomentNorm
/FUNCTION=JOINT_MOMENT
/SEGMENT=LHallux
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LMet
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/NEGATEY=TRUE
/NEGATEZ=TRUE
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/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
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;

Compute_Model_Based_Data
/RESULT_NAME=LHipPowerNorm
/FUNCTION=JOINT_POWER
/SEGMENT=LTH
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RPV
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/NEGATEY=TRUE
/NEGATEZ=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=LKneePowerNorm
/FUNCTION=JOINT_POWER
/SEGMENT=LSK
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LTH
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/NEGATEY=TRUE
/NEGATEZ=TRUE
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 /TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
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;

Compute_Model_Based_Data
/RESULT_NAME=LAnklePowerNorm
/FUNCTION=JOINT_POWER
/SEGMENT=LFT
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LSK
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/NEGATEY=TRUE
/NEGATEZ=TRUE
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/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
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;

Compute_Model_Based_Data
/RESULT_NAME=LCalPowerNorm
/FUNCTION=JOINT_POWER
/SEGMENT=LCal
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LSK
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/NEGATEY=TRUE
/NEGATEZ=TRUE
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/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
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;

Compute_Model_Based_Data
/RESULT_NAME=LMidfootPowerNorm
/FUNCTION=JOINT_POWER
/SEGMENT=LMet
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LCal
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/NEGATEY=TRUE
/NEGATEZ=TRUE
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/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
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;

Compute_Model_Based_Data
/RESULT_NAME=LMTPPowerNorm
/FUNCTION=JOINT_POWER
/SEGMENT=LHallux
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LMet
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/NEGATEY=TRUE
/NEGATEZ=TRUE
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/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
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;

Compute_Model_Based_Data
/RESULT_NAME=LHipPower
/FUNCTION=JOINT_POWER
/SEGMENT=LTH
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RPV
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/NORMALIZATION=FALSE
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/NEGATEY=TRUE
/NEGATEZ=TRUE
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/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
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;

Compute_Model_Based_Data
/RESULT_NAME=LKneePower
/FUNCTION=JOINT_POWER
/SEGMENT=LSK
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LTH
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/NORMALIZATION=FALSE
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/NEGATEY=TRUE
/NEGATEZ=TRUE
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/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
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;

Compute_Model_Based_Data
/RESULT_NAME=LAnklePower
/FUNCTION=JOINT_POWER
/SEGMENT=LFT
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LSK
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/NORMALIZATION=FALSE
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/NEGATEY=TRUE
/NEGATEZ=TRUE
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/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
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;

Compute_Model_Based_Data
/RESULT_NAME=LCalPower
/FUNCTION=JOINT_POWER
/SEGMENT=LCal
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LSK
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/NORMALIZATION=FALSE
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/NEGATEY=TRUE
/NEGATEZ=TRUE
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/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
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;

Compute_Model_Based_Data
/RESULT_NAME=LMidfootPower
/FUNCTION=JOINT_POWER
/SEGMENT=LMet
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LCal
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/NORMALIZATION=FALSE
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/NEGATEY=TRUE
/NEGATEZ=TRUE
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/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
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;

Compute_Model_Based_Data
/RESULT_NAME=LMTPPower
/FUNCTION=JOINT_POWER
/SEGMENT=LHallux
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LMet
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/NORMALIZATION=FALSE
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/NEGATEY=TRUE
/NEGATEZ=TRUE
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/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
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;

!-----------------------------------------------------------------------------------------------
! File_Save_As is used to save the workspace using the WKS_FOLDER location. Make sure the SUBJ folder is 
! created prior to running of the script. The folder will not self create on running this script.
!-----------------------------------------------------------------------------------------------
File_Save_As
/FILE_NAME=&::WKS_FOLDER&&::SUBJ&\&::SUBJ&.cmz
! /SET_PROMPT=Save CMO file as
! /SAVE_EMBEDDED_GRAPHICS=FALSE
;

!-----------------------------------------------------------------------------------------------
! The process is repeated for the next SUBJ specified or will end.  
!-----------------------------------------------------------------------------------------------
End_For_Each
/ITERATION_PARAMETER_NAME=SUBJ
;

